PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = ioHub
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Routines
  Routine Cue
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    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent cue
      fillColor = -0.6078, 0.6078, -0.6078
      lineColor = -0.6078, 0.6078, -0.6078
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
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    KeyboardComponent response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine beep
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    SoundComponent sound_1
      sound [set every repeat] = $frequency
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine report_timing
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    TextComponent text
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Report the delay between the key press and beep sound (0-1000) in ms
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = (0,250, 500, 750, 1000)
      letterHeight = 0.05
      pos = (0, 0.0)
      saveStartStop = False
      size = (1.0, 0.08)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0,250,500,750,1000)
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  Routine instructions
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the experiment you will see a green dot on the screen. When you see a green dot, press the spacebar. Following which you will hear a sound.

        Then you have to report what you think was the time in between you pressing the spacebar and you hearing the sound.

        press 'spacebar' to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'delay': 0.1, 'frequency': 1000, 'condition': 'unexpected'},
      {'delay': 0.1, 'frequency': 400, 'condition': 'expected'},
      {'delay': 0.4, 'frequency': 1000, 'condition': 'unexpected'},
      {'delay': 0.4, 'frequency': 400, 'condition': 'expected'},
      {'delay': 0.7, 'frequency': 1000, 'condition': 'unexpected'},
      {'delay': 0.7, 'frequency': 400, 'condition': 'expected'},
      {'delay': 0.1, 'frequency': 400, 'condition': 'expected'},
      {'delay': 0.4, 'frequency': 400, 'condition': 'expected'},
      {'delay': 0.7, 'frequency': 400, 'condition': 'expected'},
      {'delay': 0.1, 'frequency': 400, 'condition': 'expected'},
      {'delay': 0.4, 'frequency': 400, 'condition': 'expected'},
      {'delay': 0.7, 'frequency': 400, 'condition': 'expected'}]
    Routine Cue
    Routine beep
    Routine report_timing
  LoopTerminator trials
