PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = oct 9 class
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = circle
      size = (10,10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 60)
      saveStartStop = False
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent lin2
      fillColor = white
      ori = 90
      pos = (-50, 60)
      saveStartStop = False
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line_3
      fillColor = white
      ori = 90
      pos = (50, 60)
      saveStartStop = False
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 60)
      saveStartStop = False
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, -30)
      saveStartStop = False
      shape = triangle
      size = (10,10)
      startVal [time (s)] = 0.6
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = "z", "x", "c", "v"
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.6
      storeCorrect = True
      syncScreenRefresh = False
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  Routine instruction
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On the screen you will see four lines. You will get a hint, as to which line you have to respond to. The lines represent the keys "z", "x", "c", "v" on your keyboard.

        respond correctly and as fast as you can.

        press spacebar to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine final
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    PolygonComponent fixation_3
      fillColor = white
      saveStartStop = False
      shape = circle
      size = (10,10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent line1_2
      fillColor = white
      ori = 90
      pos = (-150, 60)
      saveStartStop = False
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent lin2_2
      fillColor = white
      ori = 90
      pos = (-50, 60)
      saveStartStop = False
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line
      fillColor = white
      ori = 90
      pos = (50, 60)
      saveStartStop = False
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent line4_2
      fillColor = white
      ori = 90
      pos = (150, 60)
      saveStartStop = False
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent probe_2
      fillColor = white
      pos [set every repeat] = (pos, -30)
      saveStartStop = False
      shape = triangle
      size = (10,10)
      startVal [time (s)] = 0.6
      units = pix
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    KeyboardComponent key_resp_3
      allowedKeys = "z", "x", "c", "v"
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.6
      storeCorrect = True
      syncScreenRefresh = False
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Flow
  Routine instruction
  LoopInitiator counter_balancing loopType="TrialHandler"
    isTrials = False
    loopType = fullRandom
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = random.xlsx
      loopType = fullRandom
      nReps = 50
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      conditions:
        [{'pos': -150, 'correct_response': 'z', 'condition': 'random'},
        {'pos': -50, 'correct_response': 'x', 'condition': 'random'},
        {'pos': 50, 'correct_response': 'c', 'condition': 'random'},
        {'pos': 150, 'correct_response': 'v', 'condition': 'random'}]
      Routine trial
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = sequential.xlsx
      loopType = sequential
      nReps = 50
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      conditions:
        [{'pos': -150, 'correct_response': 'z', 'condition': 'sequential'},
        {'pos': -50, 'correct_response': 'x', 'condition': 'sequential'},
        {'pos': 50, 'correct_response': 'c', 'condition': 'sequential'},
        {'pos': 150, 'correct_response': 'v', 'condition': 'sequential'}]
      Routine final
    LoopTerminator trials_2
  LoopTerminator counter_balancing
