PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = orientation_discrimination
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        hit = 0
        miss = 0
        correct_rejection = 0
        false_alarm = 0
      Begin Routine:
        from random import choice

        if random() < 1/2:
            tilt = 0
            correct_response = 'up'
        else:
            tilt = int(choice([i for i in range(-5,5) if i not in [0]]))
            correct_response = 'down'

        trials.addData("tilt", tilt)
      End Experiment:
        thisExp.addData("hit", hit)
        thisExp.addData("miss", miss)
        thisExp.addData("correct rejection", correct_rejection)
        thisExp.addData("flase alarm", false_alarm)
      End Routine:
        response = response_key.keys

        if correct_response == 'up':
            if(response == "up"):
                thisExp.addData("condition", "hit")
                hit = hit + 1
            elif (response == "down"):
                thisExp.addData("condition", "miss")
                miss = miss + 1
            else:
                thisExp.addData("condition", "other condition")
                print("something wrong happened")
        elif correct_response == "down":
            if(response == "down"):
                thisExp.addData("condition", "correct rejection")
                correct_rejection = correct_rejection + 1
            elif(response == "up"):
                thisExp.addData("condition", "false alarm")
                false_alarm = false_alarm + 1
            else:
                thisExp.addData("condition", "other")
                print("something wrong happened")

        thisExp.addData("user response", response)
    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      sf = 5
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent response_key
      allowedKeys = 'up','down'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Instructions
    TextComponent instruction
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On the screen you will see a gaussian surface. The lines on the surface would either be tilted or striaght.

        Press the 'up' arrow key if the lines or straight or 'down' if the lines are tilted.

        press 'spacebar' to get started
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
