PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = visual_search
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        random_value = random()
        distractors = []

        if random_value < 1/2:
            number_of_distractors = 10
            thisExp.addData("number of distractors", number_of_distractors)
        else:
            number_of_distractors = 5
            thisExp.addData("number of distractors", number_of_distractors)



        for i in range(number_of_distractors):
            distractor = visual.TextStim(win=win, name='distractor',
            text='L',
            font='Open Sans',
            pos=[random() - 0.5, random() - 0.5], height=0.05, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-3.0);

            distractors.append(distractor)

        for distractor in distractors:
            distractor.setAutoDraw(True)
      End Routine:
        for distractor in distractors:
            distractor.setAutoDraw(False)
    PolygonComponent Fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      letterHeight = 0.05
      pos [set every repeat] = (random() - 0.5, random() - 0.5)
      startVal [time (s)] = 0.0
      text = T
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    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent distractor
      disabled = True
      letterHeight = 0.05
      pos [set every repeat] = (random() - 0.5, random - 0.5)
      startVal [time (s)] = 0.0
      text = L
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
