PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = word_priming_task
  keyboardBackend = ioHub
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Routines
  Routine study_phase
    RoutineSettingsComponent study_phase
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        study_words = ["book", "cushion", "phone", "marble", "board", "laptop", "chart", "t-shirt", "mouse", "pastry", "case", "cruise", "police", "keys", "poster", "arsenal", "tennis", "danger"]
        loop_length = len(study_words)
      Begin Routine:
        study_word = study_words[study.thisN]
        thisExp.addData("study word" , study_word)
    TextComponent study_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Unfamiliar", "Familiar"
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test_phase
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    CodeComponent test_code
      Code Type = Auto->JS
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      Before Experiment:
        test_words = [
            {
                "test_word": "l_pt_p",
                "reference": "laptop",
                "old_new": "old"
            },
            {
                "test_word": "c_a_t",
                "reference": "chart",
                "old_new": "old"
            },
            {
                "test_word": "t_hi_t",
                "reference": "tshirt",
                "old_new": "old"
            },
            {
                "test_word": "_o_se",
                "reference": "mouse",
                "old_new": "old"
            },
            {
                "test_word": "p_st_y",
                "reference": "pastry",
                "old_new": "old"
            },
            {
                "test_word": "c_ui_e",
                "reference": "cruise",
                "old_new": "old"
            },
            {
                "test_word": "p_li_e",
                "reference": "police",
                "old_new": "old"
            },
            {
                "test_word": "k_y_",
                "reference": "keys",
                "old_new": "old"
            },
            {
                "test_word": "bo_r_",
                "reference": "board",
                "old_new": "old"
            },
            {
                "test_word": "_l_",
                "reference": "old",
                "old_new": "old"
            },
            {
                "test_word": "m_rbl_",
                "reference": "marble",
                "old_new": "old"
            },
            {
                "test_word": "p_on_",
                "reference": "phone",
                "old_new": "old"
            },
            {
                "test_word": "_oo_",
                "reference": "book",
                "old_new": "old"
            },
            {
                "test_word": "_en",
                "reference": "pen",
                "old_new": "new"
            },
            {
                "test_word": "c_s_io_",
                "reference": "cushion",
                "old_new": "old",
            },
            {
                "test_word": "ta_l_",
                "reference": "table",
                "old_new": "new",
            },
            {
                "test_word": "p_nc_l",
                "reference": "pencil",
                "old_new": "new",
            },
            {
                "test_word": "no_el",
                "reference": "novel",
                "old_new": "new",
            },
            {
                "test_word": "v_s_",
                "reference": "vase",
                "old_new": "new",
            },
            {
                "test_word": "b_tt_e",
                "reference": "bottle",
                "old_new": "new",
            },
            {
                "test_word": "c_m_ra",
                "reference": "camera",
                "old_new": "new",
            },
            {
                "test_word": "a_sen_l",
                "reference": "arsenal",
                "old_new": "old",
            },
            {
                "test_word": "te_n_s",
                "reference": "tennis",
                "old_new": "old",
            },
            {
                "test_word": "da_ge_",
                "reference": "danger",
                "old_new": "old",
            },
        ]

        test_loop = len(test_words)
      Begin Routine:
        test_dict = test_words[test.thisN]
        test_word = test_dict["test_word"]
        test_condition = test_dict["old_new"]
        test_reference = test_dict["reference"]

        thisExp.addData("test word", test_word)
        thisExp.addData("reference", test_dict["reference"])
        thisExp.addData("word condition", test_condition)
      End Routine:
        if test_reference.lower().strip() == response.text.strip().lower():
            thisExp.addData("correct", True)
        else:
            thisExp.addData("correct", False)
    TextComponent test_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test_word
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    TextboxComponent response
      bold = False
      editable = True
      letterHeight = 0.03
      placeholder = type here...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent submit
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = submit
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    MouseComponent mouse
      clickable = submit
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Instructions_study
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    TextComponent instructions
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In this task, you will be shown some words. You have to click on the slider below to show how familiar you are with the word..

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine instructions_test
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        You have completed the study phase.

        Now you will be shown fragmanents of a word. For example w_rd. and you have to type below the full word. In this case = word.

        After you are done typing, click on the submit button below.

        you will get 10 seconds to type you response..

        Press the spacebar to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine Instructions_study
  LoopInitiator study loopType="TrialHandler"
    loopType = random
    nReps = loop_length
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    Routine study_phase
  LoopTerminator study
  Routine instructions_test
  LoopInitiator test loopType="TrialHandler"
    loopType = random
    nReps = test_loop
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    Routine test_phase
  LoopTerminator test
