PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = orientation_discrimination
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code_50_50
      Code Type = Auto->JS
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      Begin Routine:
        random_value = random()

        if random_value < 1/2:
            direction = -level
            correct_response = "left"
        else:
            direction = level
            correct_response = "right"
      End Routine:
        thisExp.addData("orientation", direction)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    GratingComponent grating
      contrast = 0.5
      mask = gauss
      ori [set every repeat] = direction
      sf = 12
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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Flow
  LoopInitiator staircase_procedure loopType="StairHandler"
    N down = 3
    N up = 1
    loopType = staircase
    max value = 30
    min value = 1
    nReps = 200
    start value = 10
    step sizes = [2,1.5,1,0.5]
    step type = lin
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    Routine trial
  LoopTerminator staircase_procedure
